PsychoPy2experiment version="1.85.2"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = hapticsChat
  Screen = 1
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Routines
  Routine trial
    TextComponent text
      startVal [time (s)] = 0.0
      font = ヒラギノ角ゴシック W5
      letterHeight = 0.1
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      text [set every repeat]:
        $contents
    SoundComponent sound_1
      sound [set every repeat] = $sound
      volume [set every repeat] = $volume
      startVal [time (s)] = 0.0
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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  Routine survey
    RatingScaleComponent rating
      labels = Negative, Positive
      pos = 0, -0.4
      high = 7
      startVal [time (s)] = 0.0
      size = 1.0
      forceEndRoutine = True
      low = 1
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'sound': 250, 'volume': 1, 'contents': u'\u98a8\u304c\u5fc3\u5730\u3088\u304f\u5929\u6c17\u306e\u7a4f\u3084\u304b\u306a\u3001\u3059\u3063\u304d\u308a\u3068\u76ee\u899a\u3081\u305f\u4f11\u65e5\u306b \u6765\u9031\u672b\u306b\u884c\u304f\u4e88\u5b9a\u306e\u65c5\u884c\u306b\u3064\u3044\u3066\u53cb\u4eba\u305f\u3061\u3068\u8a08\u753b\u3092\u7acb\u3066\u3066\u3044\u305f\u3002'},
      {'sound': 120, 'volume': 1, 'contents': u'\u6708\u66dc\u306b\u63a7\u3048\u305f\u30c6\u30b9\u30c8\u3068\u30ec\u30dd\u30fc\u30c8\u63d0\u51fa\u306e\u6e96\u5099\u304c\u4e0d\u5341\u5206\u306a\u306e\u306b\u3001 \u571f\u66dc\u306e\u591c\u306b\u4e88\u5b9a\u3088\u308a\u3082\u65e9\u304f\u5bdd\u3066\u3057\u307e\u3063\u305f\u3002'},
      {'sound': 120, 'volume': 1, 'contents': u'\u6628\u6669\u306e\u591c\u66f4\u304b\u3057\u306b\u3082\u95a2\u308f\u3089\u305a\u9811\u5f35\u3063\u3066\u8d77\u304d\u3066\u51fa\u5e2d\u3057\u305f1\u9650 \u306e\u6388\u696d\u304c\u3001\u53cb\u4eba\u3082\u3044\u306a\u3044\u3057\u5148\u751f\u306e\u8a71\u3082\u9000\u5c48\u3067\u3042\u3063\u305f\u3002'},
      {'sound': 250, 'volume': 1, 'contents': u'\u4e45\u3057\u3076\u308a\u306b\u3086\u3063\u304f\u308a\u3067\u304d\u308b\u4f11\u65e5\u3092\u5e03\u56e3\u306e\u4e2d\u3067\u3054\u308d\u3054\u308d\u3057\u306a\u304c\u3089 TV \u3092\u898b\u305f\u308a\u3057\u3066\u6e80\u55ab\u3057\u305f\u3002'}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
    Routine trial
    Routine survey
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = conditions_2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'sound': 250, 'volume': 1, 'contents': u'\u98a8\u304c\u5fc3\u5730\u3088\u304f\u5929\u6c17\u306e\u7a4f\u3084\u304b\u306a\u3001\u3059\u3063\u304d\u308a\u3068\u76ee\u899a\u3081\u305f\u4f11\u65e5\u306b \u6765\u9031\u672b\u306b\u884c\u304f\u4e88\u5b9a\u306e\u65c5\u884c\u306b\u3064\u3044\u3066\u53cb\u4eba\u305f\u3061\u3068\u8a08\u753b\u3092\u7acb\u3066\u3066\u3044\u305f\u3002'},
      {'sound': 120, 'volume': 1, 'contents': u'\u6708\u66dc\u306b\u63a7\u3048\u305f\u30c6\u30b9\u30c8\u3068\u30ec\u30dd\u30fc\u30c8\u63d0\u51fa\u306e\u6e96\u5099\u304c\u4e0d\u5341\u5206\u306a\u306e\u306b\u3001 \u571f\u66dc\u306e\u591c\u306b\u4e88\u5b9a\u3088\u308a\u3082\u65e9\u304f\u5bdd\u3066\u3057\u307e\u3063\u305f\u3002'},
      {'sound': 120, 'volume': 1, 'contents': u'\u6628\u6669\u306e\u591c\u66f4\u304b\u3057\u306b\u3082\u95a2\u308f\u3089\u305a\u9811\u5f35\u3063\u3066\u8d77\u304d\u3066\u51fa\u5e2d\u3057\u305f1\u9650 \u306e\u6388\u696d\u304c\u3001\u53cb\u4eba\u3082\u3044\u306a\u3044\u3057\u5148\u751f\u306e\u8a71\u3082\u9000\u5c48\u3067\u3042\u3063\u305f\u3002'},
      {'sound': 250, 'volume': 1, 'contents': u'\u4e45\u3057\u3076\u308a\u306b\u3086\u3063\u304f\u308a\u3067\u304d\u308b\u4f11\u65e5\u3092\u5e03\u56e3\u306e\u4e2d\u3067\u3054\u308d\u3054\u308d\u3057\u306a\u304c\u3089 TV \u3092\u898b\u305f\u308a\u3057\u3066\u6e80\u55ab\u3057\u305f\u3002'}]
    Routine trial
    Routine survey
  LoopTerminator trials_2
